# Config file for a simple simulation of the core functions: Confocal, counter,
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    dummyscmagnet:
        module.Class: 'sc_magnet.attocube_sc_magnet_dummy.SuperConductingMagnet'
        current_ratio_x: 126.0
        current_ratio_y: 104.8
        current_ratio_z: 318.1
        
    dummymagnet:
        module.Class: 'dummy.power_supply_dummy.PowerSupplyDummy'

logic:
    scmagnetlogic:
        module.Class: 'sc_magnet_logic.CoilMagnetLogic'
        connect:
            powersupply: 'dummyscmagnet'
            
    magnetlogic:
        module.Class: 'coil_magnet_logic.CoilMagnetLogic'
        connect:
            powersupply: 'dummymagnet'

gui:
    magnet:
        module.Class: 'vector_magnet.vector_magnetgui.VectorMagnetGui'
        connect:
            scmagnetlogic: 'scmagnetlogic'
            coilmagnetlogic: 'magnetlogic'
